//execute1("celltypes.element(\"MainenCell\")")

begintemplate MainenCell
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, apic, dend10, dend9, dend8, dend7, dend6
public dend5, dend4, dend3, dend2, dend1
public all, apicals

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist = new List()
  synapses()
  x = y = z = 0 // only change via position
}

create soma, apic[83], dend10[11], dend9[5], dend8[5], dend7[13], dend6[11]
create dend5, dend4[7], dend3[5], dend2[13], dend1[9]

proc topol() { local i
  connect apic(0), soma(0.5)
  for i = 1, 2 connect apic[i](0), apic(1)
  for i = 3, 4 connect apic[i](0), apic[1](1)
  for i = 5, 6 connect apic[i](0), apic[2](1)
  for i = 7, 8 connect apic[i](0), apic[3](1)
  for i = 9, 10 connect apic[i](0), apic[4](1)
  for i = 11, 12 connect apic[i](0), apic[7](1)
  for i = 13, 14 connect apic[i](0), apic[8](1)
  for i = 15, 16 connect apic[i](0), apic[10](1)
  for i = 17, 18 connect apic[i](0), apic[11](1)
  for i = 19, 20 connect apic[i](0), apic[14](1)
  for i = 21, 22 connect apic[i](0), apic[17](1)
  for i = 23, 24 connect apic[i](0), apic[21](1)
  for i = 25, 26 connect apic[i](0), apic[23](1)
  for i = 27, 28 connect apic[i](0), apic[24](1)
  for i = 29, 30 connect apic[i](0), apic[25](1)
  for i = 31, 32 connect apic[i](0), apic[26](1)
  for i = 33, 34 connect apic[i](0), apic[27](1)
  for i = 35, 36 connect apic[i](0), apic[28](1)
  for i = 37, 38 connect apic[i](0), apic[29](1)
  for i = 39, 40 connect apic[i](0), apic[30](1)
  for i = 41, 42 connect apic[i](0), apic[31](1)
  for i = 43, 44 connect apic[i](0), apic[33](1)
  for i = 45, 46 connect apic[i](0), apic[34](1)
  for i = 47, 48 connect apic[i](0), apic[35](1)
  for i = 49, 50 connect apic[i](0), apic[36](1)
  for i = 51, 52 connect apic[i](0), apic[37](1)
  for i = 53, 54 connect apic[i](0), apic[40](1)
  for i = 55, 56 connect apic[i](0), apic[41](1)
  for i = 57, 58 connect apic[i](0), apic[43](1)
  for i = 59, 60 connect apic[i](0), apic[44](1)
  for i = 61, 62 connect apic[i](0), apic[45](1)
  for i = 63, 64 connect apic[i](0), apic[46](1)
  for i = 65, 66 connect apic[i](0), apic[47](1)
  for i = 67, 68 connect apic[i](0), apic[49](1)
  for i = 69, 70 connect apic[i](0), apic[53](1)
  for i = 71, 72 connect apic[i](0), apic[55](1)
  for i = 73, 74 connect apic[i](0), apic[63](1)
  for i = 75, 76 connect apic[i](0), apic[65](1)
  for i = 77, 78 connect apic[i](0), apic[67](1)
  for i = 79, 80 connect apic[i](0), apic[72](1)
  for i = 81, 82 connect apic[i](0), apic[73](1)
  connect dend10(0), soma(0.5)
  for i = 1, 2 connect dend10[i](0), dend10(1)
  for i = 3, 4 connect dend10[i](0), dend10[1](1)
  for i = 5, 6 connect dend10[i](0), dend10[3](1)
  for i = 7, 8 connect dend10[i](0), dend10[4](1)
  for i = 9, 10 connect dend10[i](0), dend10[5](1)
  connect dend9(0), soma(0.5)
  for i = 1, 2 connect dend9[i](0), dend9(1)
  for i = 3, 4 connect dend9[i](0), dend9[1](1)
  connect dend8(0), soma(0.5)
  for i = 1, 2 connect dend8[i](0), dend8(1)
  for i = 3, 4 connect dend8[i](0), dend8[1](1)
  connect dend7(0), soma(0.5)
  for i = 1, 2 connect dend7[i](0), dend7(1)
  for i = 3, 4 connect dend7[i](0), dend7[1](1)
  for i = 5, 6 connect dend7[i](0), dend7[2](1)
  for i = 7, 8 connect dend7[i](0), dend7[3](1)
  for i = 9, 10 connect dend7[i](0), dend7[4](1)
  for i = 11, 12 connect dend7[i](0), dend7[5](1)
  connect dend6(0), soma(0.5)
  for i = 1, 2 connect dend6[i](0), dend6(1)
  for i = 3, 4 connect dend6[i](0), dend6[1](1)
  for i = 5, 6 connect dend6[i](0), dend6[3](1)
  for i = 7, 8 connect dend6[i](0), dend6[4](1)
  for i = 9, 10 connect dend6[i](0), dend6[5](1)
  connect dend5(0), soma(0.5)
  connect dend4(0), soma(0.5)
  for i = 1, 2 connect dend4[i](0), dend4(1)
  for i = 3, 4 connect dend4[i](0), dend4[1](1)
  for i = 5, 6 connect dend4[i](0), dend4[2](1)
  connect dend3(0), soma(0.5)
  for i = 1, 2 connect dend3[i](0), dend3(1)
  for i = 3, 4 connect dend3[i](0), dend3[1](1)
  connect dend2(0), soma(0.5)
  for i = 1, 2 connect dend2[i](0), dend2(1)
  for i = 3, 4 connect dend2[i](0), dend2[1](1)
  for i = 5, 6 connect dend2[i](0), dend2[2](1)
  for i = 7, 8 connect dend2[i](0), dend2[3](1)
  for i = 9, 10 connect dend2[i](0), dend2[4](1)
  for i = 11, 12 connect dend2[i](0), dend2[9](1)
  connect dend1(0), soma(0.5)
  for i = 1, 2 connect dend1[i](0), dend1(1)
  for i = 3, 4 connect dend1[i](0), dend1[1](1)
  for i = 5, 6 connect dend1[i](0), dend1[2](1)
  for i = 7, 8 connect dend1[i](0), dend1[5](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(0, 0, 0, 25)
	pt3dadd(35, 0, 0, 25)
  }
  apic {pt3dclear()
	pt3dadd(17.5, 0, 0, 9)
	pt3dadd(17.5, 0, 0, 9)
	pt3dadd(10.8, 2.2, -3.8, 9)
	pt3dadd(9, 2.2, -5, 9)
	pt3dadd(6.7, 2.9, -5.5, 7.5)
	pt3dadd(5, 2.2, -8, 6.3)
  }
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  }
}
proc shape3d_2() {
  dend9[2] {	pt3dadd(9.3, -116.5, -148.7, 1)
	pt3dadd(10.8, -122, -156.2, 0.5)
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  }
}
proc shape3d_3() {
  apic[5] {	pt3dadd(-11.6, 29.2, 50.8, 1)
	pt3dadd(-10.8, 32, 55.2, 0.5)
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  }
}
proc shape3d_4() {
  dend8[4] {	pt3dadd(232.3, -41, 88.3, 0.5)
	pt3dadd(237, -40.5, 89.7, 0.5)
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  }
}
proc shape3d_5() {
  dend4[6] {	pt3dadd(35.2, -67, 112.6, 1)
	pt3dadd(34.2, -65.2, 116, 0.5)
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  }
}
proc shape3d_6() {
  dend2[6] {	pt3dadd(120, -180, -43.5, 0.3)
	pt3dadd(124.2, -183.8, -46.3, 0.3)
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  }
}
proc shape3d_7() {
  apic[10] {	pt3dadd(-9.60001, -10.8, -26.7, 1)
	pt3dadd(-9, -14.8, -32, 1.5)
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  }
}
proc shape3d_8() {
  dend7[9] {	pt3dadd(69, 161.5, 37.7, 0.5)
	pt3dadd(68.5, 166.5, 42.5, 0.5)
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  }
}
proc shape3d_9() {
  dend6[8] {	pt3dadd(-54.7, 92, 45.2, 0.5)
	pt3dadd(-58.5, 96.7, 48.5, 1)
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  }
}
proc shape3d_10() {
  apic[12] {	pt3dadd(-41.3, 39.9, -46, 1.5)
	pt3dadd(-44.8, 46.2, -51.5, 1.7)
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  }
}
proc shape3d_11() {
  dend10[10] {	pt3dadd(254.5, 14.4, -38.2, 0.3)
	pt3dadd(259.5, 14.4, -39.4, 0.3)
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  }
}
proc shape3d_12() {
  apic[18] {	pt3dadd(-111.8, 50.4, 65.5, 1)
	pt3dadd(-117.3, 52.2, 66, 1)
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  }
}
proc shape3d_13() {
  apic[26] {	pt3dadd(-746, 358.7, -74.2, 1.5)
	pt3dadd(-749.6, 359.1, -74.7, 1.3)
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  }
}
proc shape3d_14() {
  apic[35] {	pt3dadd(-728, 208.2, -64, 2)
	pt3dadd(-729.8, 207.6, -65, 0.3)
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  }
}
proc shape3d_15() {
  apic[46] {	pt3dadd(-833.6, 100.2, -78, 1)
	pt3dadd(-844, 97.9, -77.5, 1)
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  }
}
proc shape3d_16() {
  apic[55] {	pt3dadd(-818.8, 441.1, -112.7, 0.5)
	pt3dadd(-819.6, 445.1, -114, 0.5)
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  }
}
proc shape3d_17() {
  apic[66] {	pt3dadd(-908.3, 166.6, -14.3, 0.5)
	pt3dadd(-912.3, 166.4, -13.5, 0.5)
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  }
}
proc shape3d_18() {
  apic[76] {	pt3dadd(-948.8, 27.6, 12, 0.3)
	pt3dadd(-949.6, 23.4, 11.7, 0.3)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
}

objref all, apicals
proc subsets() { local i
  objref all, apicals
  all = new SectionList()
    soma all.append()
    for i=0, 82 apic[i] all.append()
    for i=0, 10 dend10[i] all.append()
    for i=0, 4 dend9[i] all.append()
    for i=0, 4 dend8[i] all.append()
    for i=0, 12 dend7[i] all.append()
    for i=0, 10 dend6[i] all.append()
    dend5 all.append()
    for i=0, 6 dend4[i] all.append()
    for i=0, 4 dend3[i] all.append()
    for i=0, 12 dend2[i] all.append()
    for i=0, 8 dend1[i] all.append()

  apicals = new SectionList()
    apic[21] apicals.append()
    for i=23, 82 apic[i] apicals.append()

}
proc geom() {
  forsec all {  }
}
external lambda_f
proc geom_nseg() {
  forsec all { nseg = int((L/(0.1*lambda_f(100))+.999)/2)*2 + 1  }
}
proc biophys() {
  forsec all {
    Ra = 35.4
    cm = 1
    insert pas
      g_pas = 0.001
      e_pas = -70
  }
  forsec apicals {
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
  }
  soma {
    insert hh
      gnabar_hh = 0.12
      gkbar_hh = 0.036
      gl_hh = 0.0003
      el_hh = -54.3
    insert pas
      g_pas = 0
      e_pas = -70
  }
}
proc biophys_inhomo(){}
proc position() { local i
  soma for i = 0, n3d()-1 {
    pt3dchange(i, $1-x+x3d(i), $2-y+y3d(i), $3-z+z3d(i), diam3d(i))
  }
  x = $1  y = $2  z = $3
}
obfunc connect2target() { localobj nc //$o1 target point process, optional $o2 returned NetCon
  soma nc = new NetCon(&v(1), $o1)
  nc.threshold = 10
  if (numarg() == 2) { $o2 = nc } // for backward compatibility
  return nc
}
proc synapses() {}
endtemplate MainenCell
